PsychoPy2experiment version="2024.2.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1680, 1050]
  expName = PSYCOPHY
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine intro
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    ImageComponent image
      image = img/background.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome

        In this game you will see two butterflies.

        When you see a PURPLE butterfly, select the left butterfly.

        When you see a YELLOW butterfly, select the right butterfly.

        It doesn't matter where butterflies are located, the colors indicate which side to select.
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.4, 0.1)
      startVal [time (s)] = 2
      text = NEXT
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  Routine trial
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    ImageComponent image_2
      image = img/background.jpg
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent image_3
      image [set every repeat] = $left_color
      pos = (-0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    ImageComponent image_4
      image [set every repeat] = $right_color
      pos = (0.2, 0)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = left_color,right_color
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        if mouse.clicked_name[-1] == correct_response:
            correct = 1
            trials_2.finished = True
        else:
            correct = 0

        thisExp.addData('correct', correct)
  Routine feedback1
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = $fb
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        if correct:
            fb = 'Correct!'
        else:
            fb = 'Incorrect'
Flow
  Routine intro
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions/trial1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'left_color': 'img/purple_butterfly.png', 'right_color': 'img/white_butterfly.png', 'correct_response': 'left_img_trial', 'top_txt': ' '},
      {'left_color': 'img/white_butterfly.png', 'right_color': 'img/purple_butterfly.png', 'correct_response': 'left_img_trial', 'top_txt': ' '},
      {'left_color': 'img/yellow_butterfly.png', 'right_color': 'img/white_butterfly.png', 'correct_response': 'right_img_trial', 'top_txt': ' '},
      {'left_color': 'img/white_butterfly.png', 'right_color': 'img/yellow_butterfly.png', 'correct_response': 'right_img_trial', 'top_txt': ' '}]
    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 10
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      Routine trial
      Routine feedback1
    LoopTerminator trials_2
  LoopTerminator trials
